PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = empathy_intonation_perc
  logging level = debug
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Routines
  Routine eq_trial
    TextComponent text_eq_question_trial
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    SliderComponent slider_eq_trial
      forceEndRoutine = True
      granularity = 1
      labels = 'strongly agree', 'slightly agree', 'slightly disagree', 'strongly disagree'
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.8, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating', 'triangleMarker']
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    KeyboardComponent key_resp_eq_trial
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lextale_practice
    TextComponent text_lextale_practice_label
      color = red
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = PRÁCTICA
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    TextComponent text_lextale_practice_word
      color = blue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_lextale_practice
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    TextComponent text_lextale_practice_real_label
      letterHeight = 0.1
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $prac_button_real
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    TextComponent text_lextale_practice_false_label
      letterHeight = 0.1
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $prac_button_false
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  Routine lextale_practice_feedback
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        if (key_resp_lextale_practice.corr == 1) {      msg = "Correcto!"; } else {      msg = "Incorrecto!"; }
      Begin Routine:
        if key_resp_lextale_practice.corr == 1:
            msg = "Correcto!"
        else:
            msg = "Ooo! Te has equivocado!"
    TextComponent text_lextale_practice_feedback
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_lextale_practice_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = nothing
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  Routine lextale_trial
    TextComponent text_lextale_trial_word
      color = blue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_lextale_trial
      allowedKeys = '1','0'
      correctAns = $correct_response
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    TextComponent text_lextale_trial_real_label
      letterHeight = 0.1
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $button_real
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    TextComponent text_lextale_trial_false_label
      letterHeight = 0.1
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $button_false
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  Routine lextale_check
    TextComponent text_lextale_check
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¿Preguntas?

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_lextale_check
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine lextale_instructions
    TextComponent text_lextale_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
      wrapWidth = 0.8
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    KeyboardComponent key_resp_lextale_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_lextale_instructions_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 2.5
      text [set every repeat] = $continue_text
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  Routine eq_instructions
    KeyboardComponent key_resp_eq_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_eq_instructions
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = instructions here
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Flow
  LoopInitiator lextale_instructions_loop loopType="TrialHandler"
    conditionsFile = instructions/lextale_instructions_text.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions_text', "Este es un test de vocabulario en español. \n  \n  A continuación vas a ver 90 secuencias de letras que parecen 'españolas'.\n  \n  Solo algunas de ellas son palabras de verdad."), ('continue_text', '(presiona la barra espaciadora para continuar)')]),
      OrderedDict([('instructions_text', 'Por favor, señala las palabras que tú conoces (aquellas que estás convencido que son palabras españolas, incluso aunque no seas capaz de dar el significado preciso).'), ('continue_text', '(presiona la barra espaciadora para continuar)')]),
      OrderedDict([('instructions_text', 'Pero cuidado: los errores se penalizan. Por eso no tiene sentido tratar de incrementar tu puntuación marcando como reales palabras que nunca has visto.'), ('continue_text', '(presiona la barra espaciadora para continuar)')]),
      OrderedDict([('instructions_text', 'Presiona la tecla 1 si piensas que es una palabra real y la tecla \n  0 si piensas que es una palabra falsa. \n  \n  Vamos a practicar un poco...'), ('continue_text', '(presiona la barra espaciadora para continuar)')])]
    Routine lextale_instructions
  LoopTerminator lextale_instructions_loop
  LoopInitiator lextale_practice_trials loopType="TrialHandler"
    conditionsFile = trials/lextale_practice_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 0), ('word', 'depiste'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'sí'), ('correct_response', 1), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'coné'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'calpar'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'joten'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'sacapuntas'), ('correct_response', 1), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'priba'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'pelasula'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'bien'), ('correct_response', 1), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'casa'), ('correct_response', 1), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'lejo'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')])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
    Routine lextale_practice
    Routine lextale_practice_feedback
  LoopTerminator lextale_practice_trials
  Routine lextale_check
  LoopInitiator lextail_trials loopType="TrialHandler"
    conditionsFile = trials/lextale_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 1), ('word', 'terzo'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 2), ('word', 'pellizcar'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 3), ('word', 'pulmones'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 4), ('word', 'batillón'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 5), ('word', 'zapato'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 6), ('word', 'tergiversar'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 7), ('word', 'pésimo'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 8), ('word', 'cadeña'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 9), ('word', 'hacha'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 10), ('word', 'antar'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 11), ('word', 'cenefa'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 12), ('word', 'asesinato'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')])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
    Routine lextale_trial
  LoopTerminator lextail_trials
  Routine eq_instructions
  LoopInitiator eq_trials loopType="TrialHandler"
    conditionsFile = trials/eq_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('item_num', 1), ('item', 'I can easily tell if someone else wants to enter a conversation.'), ('is_test_item', 1), ('is_distractor', 0), ('is_agree_score', 1), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 2), ('item', 'I prefer animals to humans.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 3), ('item', 'I try to keep up with the current trends and fashions.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 4), ('item', 'I find it difficult to explain to others things that I understand easily, \n  when they don’t understand it first time.'), ('is_test_item', 1), ('is_distractor', 0), ('is_agree_score', 0), ('is_disagree_score', 1)]),
      OrderedDict([('item_num', 5), ('item', 'I dream most nights.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 6), ('item', 'I really enjoy caring for other people.'), ('is_test_item', 1), ('is_distractor', 0), ('is_agree_score', 1), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 7), ('item', 'I try to solve my own problems rather than discussing them with others.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)])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
    Routine eq_trial
  LoopTerminator eq_trials
