PsychoPy2experiment version="2020.2.10"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['id'], expName, expInfo['date'])
  Experiment info = {'id': '', 'Variety of Spanish that is most familiar to you?': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = empathy_intonation_perc
  logging level = debug
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Routines
  Routine instructions_2afc
    TextComponent text_2afc_instruction
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    TextComponent text_2afc_instructions_continue
      letterHeight = 0.045
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_text
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    KeyboardComponent key_resp_2afc_instructions
      allowedKeys = 'c','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_2afc
    SoundComponent sound_2afc_practice_stim
      sound [set every repeat] = $path
      startVal [time (s)] = 0.500
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    TextComponent text_2afc_response_yes_practice
      letterHeight = 0.1
      pos = (-0.3, 0)
      startVal [time (s)] = 0.250
      text = Yes
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    TextComponent text_2afc_response_no_practice
      letterHeight = 0.1
      pos = (0.3, 0)
      startVal [time (s)] = 0.250
      text = No
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    KeyboardComponent key_resp_2afc_practice
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      store = first key
      storeCorrect = True
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    TextComponent text_2afc_question_practice
      color = blue
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Is it a question?
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  Routine check_2afc
    TextComponent text_2afc_check
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great! Now we’ll begin for real.

        Try to respond as quickly and as accurately as possible after hearing each utterance.

        (press the spacebar to start)
    KeyboardComponent key_resp_2afc_gotit
      allowedKeys = 'c','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_2afc
    CodeComponent code_2afc
      Code Type = Both
      Begin Experiment:
        col_name = ['andalusian', 'argentine', 'castilian', 'chilean', 'cuban', 'mexican', 'peruvian', 'puertorican']
      Begin JS Experiment:
        col_name = ['andalusian', 'argentine', 'castilian', 'chilean', 'cuban', 'mexican', 'peruvian', 'puertorican']
      Begin JS Routine:
        the_col = col_name[Math.floor(Math.random() * col_name.length)];
      Begin Routine:
        the_col = np.random.choice(col_name, p=[0.125, 0.125, 0.125, 0.125, 0.125, 0.125, 0.125, 0.125])
      End JS Routine:
        trials_2afc_loop.addData('the_col', the_col)
      End Routine:
        trials_2afc_loop.addData('the_col', the_col)
    SoundComponent sound_2afc_stim_trial
      sound [set every repeat] = $eval(the_col)
      startVal [time (s)] = 0.500
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    TextComponent text_2afc_response_yes_trial
      letterHeight = 0.1
      pos = (-0.3, 0)
      startVal [time (s)] = 0.250
      text = Yes
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    TextComponent text_2afc_response_no_trial
      letterHeight = 0.1
      pos = (0.3, 0)
      startVal [time (s)] = 0.250
      text = No
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    KeyboardComponent key_resp_2afc_trial
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      store = first key
      storeCorrect = True
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    TextComponent text_2afc_question_trial
      color = blue
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Is this a question?
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  Routine instructions_lextale
    TextComponent text_lextale_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
      wrapWidth = 0.8
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    KeyboardComponent key_resp_lextale_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_lextale_instructions_continue
      letterHeight = 0.04
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 2.5
      text [set every repeat] = $continue_text
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  Routine practice_lextale
    TextComponent text_lextale_practice_label
      color = red
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = PRACTICE
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    TextComponent text_lextale_practice_word
      color = blue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_lextale_practice
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    TextComponent text_lextale_practice_real_label
      letterHeight = 0.1
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $prac_button_real
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    TextComponent text_lextale_practice_false_label
      letterHeight = 0.1
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $prac_button_false
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  Routine practice_feedback_lextale
    CodeComponent code_lextale
      Code Type = Both
      Begin JS Routine:
        if (key_resp_lextale_practice.corr == 1) {      msg = "Correct! That's a real word."; } else {      msg = "Ooo! That's not a real word."; }
      Begin Routine:
        if key_resp_lextale_practice.corr == 1:
            msg = "Correct! That's a real word."
        else:
            msg = "Ooo! That's not a real word."
    TextComponent text_lextale_practice_feedback
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_lextale_practice_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = nothing
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  Routine check_lextale
    TextComponent text_lextale_check
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Great! Let’s start.

        Press the spacebar to continue.
    KeyboardComponent key_resp_lextale_check
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_lextale
    TextComponent text_lextale_trial_word
      color = blue
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp_lextale_trial
      allowedKeys = '1','0'
      correctAns = $correct_response
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = first key
      storeCorrect = True
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    TextComponent text_lextale_trial_real_label
      letterHeight = 0.1
      pos = (-0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $button_real
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    TextComponent text_lextale_trial_false_label
      letterHeight = 0.1
      pos = (0.3, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.25
      text [set every repeat] = $button_false
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  Routine instructions_eq
    KeyboardComponent key_resp_eq_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_eq_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Awesome! Now on to the final task.

        You are going to see a series of statements in English.

        Please read each statement carefully and rate how strongly you agree or disagree with it by using your mouse to click on the line.

        There are no right or wrong answers, or trick questions.

        (press the spacebar to begin)
  Routine trial_eq
    TextComponent text_eq_question_trial
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    SliderComponent slider_eq_trial
      forceEndRoutine = True
      granularity = 1
      labels = 'strongly agree', 'slightly agree', 'slightly disagree', 'strongly disagree'
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.8, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ['rating', 'triangleMarker']
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    KeyboardComponent key_resp_eq_trial
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_exp
  Routine start_exp
    TextComponent text_start_exp_variety
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        What variety of Spanish are you most familiar with?

        Type your answer below (e.g., Peruvian)
    TextboxComponent textbox_start_exp_variety
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.04
      padding = None
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = response
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    MouseComponent mouse_start_exp_variety
      clickable = end_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    TextComponent end_button
      letterHeight = 0.045
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = click here to continue
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Flow
  LoopInitiator instructions_2afc_loop loopType="TrialHandler"
    conditionsFile = instructions/2afc_instructions_text.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions_text', 'In the following task you are going to hear a series of utterances. \n\n  You will decide if the utterances sound like questions or not using your keyboard.'), ('continue_text', '(press the spacebar to continue)')]),
      OrderedDict([('instructions_text', "If you believe the utterance is a question, type '1' (for 'yes') and if you do not \n  believe it is a question type '0' (for 'no').\n\n  Let's practice a bit..."), ('continue_text', '(press the spacebar to continue)')])]
    Routine instructions_2afc
  LoopTerminator instructions_2afc_loop
  LoopInitiator trials_2afc_practice_loop loopType="TrialHandler"
    conditionsFile = trials/twoafc_practice_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('path', './stim/wavs/castilian_question_filler_Mi-esposo-conoce-al-chico.wav'), ('correct_response', 1)]),
      OrderedDict([('path', './stim/wavs/argentine_question_filler_Mi-vecino-habla-mucho.wav'), ('correct_response', 1)]),
      OrderedDict([('path', './stim/wavs/chilean_question_filler_Mi-padre-cantaba-bien.wav'), ('correct_response', 1)]),
      OrderedDict([('path', './stim/wavs/mexican_question_filler_Felipe-no-tiene-contrasena.wav'), ('correct_response', 1)]),
      OrderedDict([('path', './stim/wavs/cuban_statement_filler_Cocinabas-por-la-noche.wav'), ('correct_response', 0)]),
      OrderedDict([('path', './stim/wavs/andalusian_statement_filler_Alberto-nunca-se-afeita.wav'), ('correct_response', 0)]),
      OrderedDict([('path', './stim/wavs/peruvian_statement_filler_El-nino-habla-con-su-madre.wav'), ('correct_response', 0)]),
      OrderedDict([('path', './stim/wavs/puertorican_statement_filler_La-nina-pinta-con-su-amiga.wav'), ('correct_response', 0)])]
    Routine practice_2afc
  LoopTerminator trials_2afc_practice_loop
  Routine check_2afc
  LoopInitiator trials_2afc_loop loopType="TrialHandler"
    conditionsFile = trials/twoafc_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item_num', 1), ('correct_response', 0), ('andalusian', './stim/wavs/andalusian_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav'), ('argentine', './stim/wavs/argentine_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav'), ('castilian', './stim/wavs/castilian_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav'), ('chilean', './stim/wavs/chilean_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav'), ('cuban', './stim/wavs/cuban_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav'), ('mexican', './stim/wavs/mexican_match_declarative-broad-focus_Ana-lleva-el-abrigo.w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,
      OrderedDict([('item_num', 2), ('correct_response', 0), ('andalusian', './stim/wavs/andalusian_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav'), ('argentine', './stim/wavs/argentine_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav'), ('castilian', './stim/wavs/castilian_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav'), ('chilean', './stim/wavs/chilean_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav'), ('cuban', './stim/wavs/cuban_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav'), ('mexican', './stim/wavs/mexican_match_declarative-broad-focus_Daniel-iba-a-Boli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,
      OrderedDict([('item_num', 3), ('correct_response', 0), ('andalusian', './stim/wavs/andalusian_match_declarative-broad-focus_David-leia-el-libro.wav'), ('argentine', './stim/wavs/argentine_match_declarative-broad-focus_David-leia-el-libro.wav'), ('castilian', './stim/wavs/castilian_match_declarative-broad-focus_David-leia-el-libro.wav'), ('chilean', './stim/wavs/chilean_match_declarative-broad-focus_David-leia-el-libro.wav'), ('cuban', './stim/wavs/cuban_match_declarative-broad-focus_David-leia-el-libro.wav'), ('mexican', './stim/wavs/mexican_match_declarative-broad-focus_David-leia-el-libro.wa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,
      OrderedDict([('item_num', 4), ('correct_response', 0), ('andalusian', './stim/wavs/andalusian_match_declarative-broad-focus_Emilio-ama-la-marcha.wav'), ('argentine', './stim/wavs/argentine_match_declarative-broad-focus_Emilio-ama-la-marcha.wav'), ('castilian', './stim/wavs/castilian_match_declarative-broad-focus_Emilio-ama-la-marcha.wav'), ('chilean', './stim/wavs/chilean_match_declarative-broad-focus_Emilio-ama-la-marcha.wav'), ('cuban', './stim/wavs/cuban_match_declarative-broad-focus_Emilio-ama-la-marcha.wav'), ('mexican', './stim/wavs/mexican_match_declarative-broad-focus_Emilio-ama-la-mar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
    Routine trial_2afc
  LoopTerminator trials_2afc_loop
  LoopInitiator instructions_lextale_loop loopType="TrialHandler"
    conditionsFile = instructions/lextale_instructions_text.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions_text', 'Great! Now we will move on. The next task consists of about 60 trials, in each of which you will see a string of letters. \n  \n  Your task is to decide whether this is a real Spanish word or not.'), ('continue_text', '(press the spacebar to continue)')]),
      OrderedDict([('instructions_text', "If you think it is an existing Spanish word, you type '1' (for 'REAL'), and if you think it is not an existing Spanish word, you type '0' (for 'FAKE')."), ('continue_text', '(press the spacebar to continue)')]),
      OrderedDict([('instructions_text', "If you are sure that the word exists, even though you don’t know its exact meaning, you may still respond '1' (REAL). \n  \n  But if you are not sure if it is an existing word, you should respond '0' (FAKE).\n  \n  Let's do a practice round..."), ('continue_text', '(press the spacebar to continue)')])]
    Routine instructions_lextale
  LoopTerminator instructions_lextale_loop
  LoopInitiator trials_lextale_practice_loop loopType="TrialHandler"
    conditionsFile = trials/lextale_practice_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 0), ('word', 'depiste'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'sí'), ('correct_response', 1), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'coné'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'calpar'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'joten'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'sacapuntas'), ('correct_response', 1), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'priba'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'pelasula'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'bien'), ('correct_response', 1), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'casa'), ('correct_response', 1), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')]),
      OrderedDict([('stim', 0), ('word', 'lejo'), ('correct_response', 0), ('prac_button_real', 'REAL'), ('prac_button_false', 'FALSA')])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
    Routine practice_lextale
    Routine practice_feedback_lextale
  LoopTerminator trials_lextale_practice_loop
  Routine check_lextale
  LoopInitiator trials_lextale_loop loopType="TrialHandler"
    conditionsFile = trials/lextale_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stim', 1), ('word', 'terzo'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 2), ('word', 'pellizcar'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 3), ('word', 'pulmones'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 4), ('word', 'batillón'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 5), ('word', 'zapato'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 6), ('word', 'tergiversar'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 7), ('word', 'pésimo'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 8), ('word', 'cadeña'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 9), ('word', 'hacha'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 10), ('word', 'antar'), ('correct_response', 0), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 11), ('word', 'cenefa'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')]),
      OrderedDict([('stim', 12), ('word', 'asesinato'), ('correct_response', 1), ('button_real', 'REAL'), ('button_false', 'FALSA')])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
    Routine trial_lextale
  LoopTerminator trials_lextale_loop
  Routine instructions_eq
  LoopInitiator trials_eq_loop loopType="TrialHandler"
    conditionsFile = trials/eq_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('item_num', 1), ('item', 'I can easily tell if someone else wants to enter a conversation.'), ('is_test_item', 1), ('is_distractor', 0), ('is_agree_score', 1), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 2), ('item', 'I prefer animals to humans.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 3), ('item', 'I try to keep up with the current trends and fashions.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 4), ('item', 'I find it difficult to explain to others things that I understand easily, \n  when they don’t understand it first time.'), ('is_test_item', 1), ('is_distractor', 0), ('is_agree_score', 0), ('is_disagree_score', 1)]),
      OrderedDict([('item_num', 5), ('item', 'I dream most nights.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 6), ('item', 'I really enjoy caring for other people.'), ('is_test_item', 1), ('is_distractor', 0), ('is_agree_score', 1), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 7), ('item', 'I try to solve my own problems rather than discussing them with others.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)])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
    Routine trial_eq
  LoopTerminator trials_eq_loop
  Routine end_exp
