PsychoPy2experiment version="2022.2.4"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=7BA7FE99
  Data file delimiter = comma
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'study_id': 'pr', 'session': '001', 'Tu variedad del español*': 'Puerto Rico', '¿Hablas con fluidez otra lengua (sí/no)?*': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = empathy_intonation_perc_sp_pr
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine prompt
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = Es una pregunta?
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  Routine check_2afc
    TextComponent text_2afc_check
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bien! Ahora vamos a empezar.

        Intenta responder lo más rápido posible sin cometer errores después de escuchar cada enunciado.

        (presiona la barra espaciadora para comenzar)
    KeyboardComponent key_resp_2afc_gotit
      allowedKeys = 'c','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_2afc
    TextComponent text_2afc_instructions
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    TextComponent text_2afc_instructions_continue
      letterHeight = 0.045
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $continue_text
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    KeyboardComponent key_resp_2afc_instructions
      allowedKeys = 'c', 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_2afc
    SoundComponent sound_2afc_practice_stim
      sound [set every repeat] = $path
      startVal [time (s)] = 0.500
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    TextComponent text_2afc_response_yes_practice
      letterHeight = 0.1
      pos = (-0.3, 0)
      startVal [time (s)] = 0.250
      text = Sí
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    TextComponent text_2afc_response_no_practice
      letterHeight = 0.1
      pos = (0.3, 0)
      startVal [time (s)] = 0.250
      text = No
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    KeyboardComponent key_resp_2afc_practice
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      store = first key
      storeCorrect = True
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    TextComponent text_2afc_question_practice
      color = blue
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = ¿Es una pregunta?
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  Routine trial_2afc
    CodeComponent code_2afc
      Code Type = Both
      disabled = True
      Begin Experiment:
        col_name = ['andalusian', 'argentine', 'castilian', 'chilean', 'cuban', 'mexican', 'peruvian', 'puertorican']
      Begin JS Experiment:
        col_name = ['andalusian', 'argentine', 'castilian', 'chilean', 'cuban', 'mexican', 'peruvian', 'puertorican'];
      Begin JS Routine:
        the_col = col_name[Math.floor(Math.random() * col_name.length)];
      Begin Routine:
        the_col = np.random.choice(col_name, p=[0.125, 0.125, 0.125, 0.125, 0.125, 0.125, 0.125, 0.125])
      End JS Routine:
        trials_2afc_loop.addData("the_col", the_col);
      End Routine:
        trials_2afc_loop.addData('the_col', the_col)
    SoundComponent sound_stim_trial
      sound [set every repeat] = $puertorican
      startVal [time (s)] = 0.500
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    TextComponent text_response_yes_trial
      letterHeight = 0.1
      pos = (-0.3, 0)
      startVal [time (s)] = 0.250
      text = Sí
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    TextComponent text_response_no_trial
      letterHeight = 0.1
      pos = (0.3, 0)
      startVal [time (s)] = 0.250
      text = No
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    KeyboardComponent key_resp_2afc_trial
      allowedKeys = '1','0'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.500
      store = first key
      storeCorrect = True
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    TextComponent text_question_trial
      color = blue
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = ¿Es una pregunta?
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Flow
  LoopInitiator instructions_2afc_loop loopType="TrialHandler"
    conditionsFile = instructions/2afc_instructions_sp_text.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions_text', 'En la siguiente tarea vas a escuchar una serie de frases cortas. \n\n  Vas a decidir si suenan como preguntas o no usando el teclado.'), ('continue_text', '(presiona la barra espaciadora para continuar)')]),
      OrderedDict([('instructions_text', "Si crees que el enunciado es una pregunta, teclea '1' (Sí) y si crees que \n  no es una pregunta teclea '0' (no).\n\n  Vamos a practicar..."), ('continue_text', '(presiona la barra espaciadora para continuar)')])]
    Routine instructions_2afc
  LoopTerminator instructions_2afc_loop
  LoopInitiator trials_2afc_practice_loop loopType="TrialHandler"
    conditionsFile = trials/twoafc_practice_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('path', './stim/wavs/castilian_question_filler_Mi-esposo-conoce-al-chico.wav'), ('correct_response', 1)]),
      OrderedDict([('path', './stim/wavs/argentine_question_filler_Mi-vecino-habla-mucho.wav'), ('correct_response', 1)]),
      OrderedDict([('path', './stim/wavs/chilean_question_filler_Mi-padre-cantaba-bien.wav'), ('correct_response', 1)]),
      OrderedDict([('path', './stim/wavs/mexican_question_filler_Felipe-no-tiene-contrasena.wav'), ('correct_response', 1)]),
      OrderedDict([('path', './stim/wavs/cuban_statement_filler_Cocinabas-por-la-noche.wav'), ('correct_response', 0)]),
      OrderedDict([('path', './stim/wavs/andalusian_statement_filler_Alberto-nunca-se-afeita.wav'), ('correct_response', 0)]),
      OrderedDict([('path', './stim/wavs/peruvian_statement_filler_El-nino-habla-con-su-madre.wav'), ('correct_response', 0)]),
      OrderedDict([('path', './stim/wavs/puertorican_statement_filler_La-nina-pinta-con-su-amiga.wav'), ('correct_response', 0)])]
    Routine practice_2afc
  LoopTerminator trials_2afc_practice_loop
  Routine check_2afc
  LoopInitiator trials_2afc_loop loopType="TrialHandler"
    conditionsFile = trials/twoafc_trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_num': 1, 'correct_response': 0, 'andalusian': './stim/wavs/andalusian_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'argentine': './stim/wavs/argentine_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'castilian': './stim/wavs/castilian_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'chilean': './stim/wavs/chilean_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'cuban': './stim/wavs/cuban_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'mexican': './stim/wavs/mexican_match_declarative-broad-focus_Ana-lleva-el-abrigo.wav', 'peruvian': './stim/wa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,
      {'item_num': 2, 'correct_response': 0, 'andalusian': './stim/wavs/andalusian_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'argentine': './stim/wavs/argentine_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'castilian': './stim/wavs/castilian_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'chilean': './stim/wavs/chilean_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'cuban': './stim/wavs/cuban_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'mexican': './stim/wavs/mexican_match_declarative-broad-focus_Daniel-iba-a-Bolivia.wav', 'peruvian': './st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,
      {'item_num': 3, 'correct_response': 0, 'andalusian': './stim/wavs/andalusian_match_declarative-broad-focus_David-leia-el-libro.wav', 'argentine': './stim/wavs/argentine_match_declarative-broad-focus_David-leia-el-libro.wav', 'castilian': './stim/wavs/castilian_match_declarative-broad-focus_David-leia-el-libro.wav', 'chilean': './stim/wavs/chilean_match_declarative-broad-focus_David-leia-el-libro.wav', 'cuban': './stim/wavs/cuban_match_declarative-broad-focus_David-leia-el-libro.wav', 'mexican': './stim/wavs/mexican_match_declarative-broad-focus_David-leia-el-libro.wav', 'peruvian': './stim/wav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,
      {'item_num': 4, 'correct_response': 0, 'andalusian': './stim/wavs/andalusian_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'argentine': './stim/wavs/argentine_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'castilian': './stim/wavs/castilian_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'chilean': './stim/wavs/chilean_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'cuban': './stim/wavs/cuban_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'mexican': './stim/wavs/mexican_match_declarative-broad-focus_Emilio-ama-la-marcha.wav', 'peruvian': './st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
    Routine trial_2afc
  LoopTerminator trials_2afc_loop
