PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1050, 750]
  color = $[1,1,1]
  expName = text_stim_for_audio
  logging level = debug
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Routines
  Routine fillers
  Routine stim
    TextComponent text_stim_stim_n
      color = grey
      letterHeight = 0.03
      pos = (-0.67, -0.47)
      startVal [time (s)] = 0.0
      text [set every repeat] = $stim_n
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    TextComponent text_stim_sentence_type
      color = grey
      letterHeight = 0.03
      pos = (-0.57, -0.47)
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentence_type
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    TextComponent text_stim_condition
      color = grey
      letterHeight = 0.03
      pos = (0.0, -0.47)
      startVal [time (s)] = 0.0
      text [set every repeat] = $condition
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    TextComponent text_stim_prompt
      color [set every repeat] = $color
      letterHeight = 0.07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $prompt
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    TextComponent text_stim_sentence
      color = black
      letterHeight = 0.09
      startVal [time (s)] = 0.05
      text [set every repeat] = $sentence
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    KeyboardComponent key_resp_stim
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator stim_loop loopType="TrialHandler"
    conditionsFile = trials/stim_list.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim_n', 0), ('sentence_type', ' '), ('condition', ' '), ('prompt', 'Instrucciones'), ('sentence', 'Por favor lea las siguientes frases.'), ('color', 'blue')]),
      OrderedDict([('stim_n', 1), ('sentence_type', 'match'), ('condition', 'declarative_broad_focus'), ('prompt', ' '), ('sentence', 'Daniel iba a Bolivia'), ('color', 'white')]),
      OrderedDict([('stim_n', 2), ('sentence_type', 'match'), ('condition', 'declarative_broad_focus'), ('prompt', ' '), ('sentence', 'David leía el libro.'), ('color', 'white')]),
      OrderedDict([('stim_n', 3), ('sentence_type', 'match'), ('condition', 'declarative_broad_focus'), ('prompt', ' '), ('sentence', 'Emilio ama la navidad.'), ('color', 'white')]),
      OrderedDict([('stim_n', 4), ('sentence_type', 'match'), ('condition', 'declarative_broad_focus'), ('prompt', ' '), ('sentence', 'Mariano hablaba del tiempo'), ('color', 'white')]),
      OrderedDict([('stim_n', 5), ('sentence_type', 'match'), ('condition', 'declarative_broad_focus'), ('prompt', ' '), ('sentence', 'Ana lleva el abrigo.'), ('color', 'white')]),
      OrderedDict([('stim_n', 6), ('sentence_type', 'match'), ('condition', 'declarative_broad_focus'), ('prompt', ' '), ('sentence', 'María bebía el vino.'), ('color', 'white')]),
      OrderedDict([('stim_n', 7), ('sentence_type', 'match'), ('condition', 'declarative_broad_focus'), ('prompt', ' '), ('sentence', 'Olivia abre el regalo.'), ('color', 'white')])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
    Routine stim
  LoopTerminator stim_loop
  LoopInitiator fillers_loop loopType="TrialHandler"
    conditionsFile = trials/filler_list.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stim_n', 1), ('sentence_type', 'statement'), ('condition', 'A'), ('prompt', 'filler'), ('sentence', 'Roberto cocina por la mañana.'), ('color', 'white')]),
      OrderedDict([('stim_n', 2), ('sentence_type', 'statement'), ('condition', 'B'), ('prompt', 'filler'), ('sentence', 'Ana practicaba el yoga.'), ('color', 'white')]),
      OrderedDict([('stim_n', 3), ('sentence_type', 'statement'), ('condition', 'A'), ('prompt', 'filler'), ('sentence', 'La niña pinta con su amiga.'), ('color', 'white')]),
      OrderedDict([('stim_n', 4), ('sentence_type', 'statement'), ('condition', 'C'), ('prompt', 'filler'), ('sentence', 'Las chicas dan una fiesta hoy.'), ('color', 'white')]),
      OrderedDict([('stim_n', 5), ('sentence_type', 'statement'), ('condition', 'A'), ('prompt', 'filler'), ('sentence', 'Isabel duerme por muchas horas.'), ('color', 'white')]),
      OrderedDict([('stim_n', 6), ('sentence_type', 'statement'), ('condition', 'B'), ('prompt', 'filler'), ('sentence', 'Alberto nunca se afeita.'), ('color', 'white')]),
      OrderedDict([('stim_n', 7), ('sentence_type', 'statement'), ('condition', 'A'), ('prompt', 'filler'), ('sentence', 'La madre pasa la aspiradora.'), ('color', 'white')]),
      OrderedDict([('stim_n', 8), ('sentence_type', 'statement'), ('condition', 'C'), ('prompt', 'filler'), ('sentence', 'El estudiante odia la tarea.'), ('color', 'white')])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
    Routine stim
  LoopTerminator fillers_loop
